PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'starting_run': '0', '': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1792, 1120]
  expName = replicate_nsd
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      skipIf = is_blank_trial_or_before_starting_run
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    ImageComponent image
      image [set every repeat] = $current_image
      size = (8.4, 8.4)
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
      units = deg
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    KeyboardComponent press_if_repeat
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [frame N] = 60
      stopVal [duration (frames)] = 180
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.3
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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  Routine instructions
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    TextComponent text
      letterHeight = 5
      startVal [time (s)] = 0.0
      text = put instructions here. press spacebar.
      units = deg
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        participant_conditions_file = "conditions_files/participant" + expInfo["participant"] + "_.csv"
        starting_run = int(expInfo["starting_run"])
        print("starting_run: ", starting_run)
  Routine waiting_fmri
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    KeyboardComponent key_resp_2
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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  Routine blank_trial
    RoutineSettingsComponent blank_trial
      skipIf = is_not_blank_trial_or_before_starting_run
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_3
      forceEndRoutine = False
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      opacity = 0.3
      shape = circle
      size = (0.2, 0.2)
      startVal [frame N] = 0
      stopVal [duration (frames)] = 240
      units = deg
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  Routine run_wait
    RoutineSettingsComponent run_wait
      skipIf = is_not_new_run
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run = True
      Begin Routine:
        is_not_new_run = True if not is_new_run else False
    CodeComponent set_up_block
      Code Type = Auto->JS
    TextComponent text_2
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [duration (frames)] = 300
      text = waiting.
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  Routine waiting_fmri_2
    RoutineSettingsComponent waiting_fmri_2
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_4
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = waiting for scanner…
      units = deg
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  Routine run_wait2
    RoutineSettingsComponent run_wait2
      skipIf = is_not_new_run_or_before_starting_run
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      text = Good job! Please press any button when you are ready to continue.
      units = deg
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  Routine set_skips
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    CodeComponent trial_routine_set_up
      Code Type = Auto->JS
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      Begin Experiment:
        is_blank_trial_or_before_starting_run = False
      Begin Routine:
        if is_blank_trial or run_num < starting_run:
            is_blank_trial_or_before_starting_run = True
        else:
            is_blank_trial_or_before_starting_run = False
    CodeComponent blank_trial_set_up
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_blank_trial_or_before_starting_run = False
      Begin Routine:
        if not is_blank_trial or run_num < starting_run:
            is_not_blank_trial_or_before_starting_run = True
        else:
            is_not_blank_trial_or_before_starting_run = False
    CodeComponent between_round_screens_skip_set_up_2
      Code Type = Auto->JS
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      Begin Experiment:
        is_not_new_run_or_before_starting_run = False
      Begin Routine:
        if not is_new_run or run_num < starting_run:
            is_not_new_run_or_before_starting_run = True
        else:
            is_not_new_run_or_before_starting_run = False
Flow
  Routine set_up
  Routine waiting_fmri
  LoopInitiator loop_all_images loopType="TrialHandler"
    conditionsFile = $participant_conditions_file
    loopType = sequential
    nReps = 1
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    Routine set_skips
    Routine trial
    Routine blank_trial
    Routine run_wait2
    Routine waiting_fmri_2
  LoopTerminator loop_all_images
